WorkflowBuilder(Version=2.9.0)
ExternalizedMapping(TaskLogicPath(DisplayName=TaskPath), RigPath, SessionPath)
-> IncludeWorkflow(Path=AllenNeuralDynamics.Core:ReadSchemas.bonsai, TaskLogicPath="", RigPath="", SessionPath="")

GroupWorkflow LoadSchemas
    SubscribeSubject RawSessionSchema
    -> AindBehaviorTelekinesisDataSchema.DeserializeFromJson(Type=TypeMapping<AindBehaviorTelekinesisDataSchema.Session>)
    -> Take(Count=1)
    -> AsyncSubject SubjectSchema

    SubscribeSubject RawRigSchema
    -> AindBehaviorTelekinesisDataSchema.DeserializeFromJson(Type=TypeMapping<AindBehaviorTelekinesisDataSchema.AindBehaviorTelekinesisRig>)
    -> Take(Count=1)
    -> AsyncSubject RigSchema

    SubscribeSubject RawTaskLogicSchema
    -> AindBehaviorTelekinesisDataSchema.DeserializeFromJson(Type=TypeMapping<AindBehaviorTelekinesisDataSchema.AindBehaviorTelekinesisTaskLogic>)
    -> Take(Count=1)
    -> AsyncSubject TaskLogicSchema
    -> MemberSelector(Selector=TaskParameters)
    -> AsyncSubject TaskLogicParameters

Annotation(Text="")
-> GroupWorkflow Hardware
    SubscribeSubject HarpWhiteRabbitEvents
    -> AllenNeuralDynamics.WhiteRabbit.Parse(Register=AllenNeuralDynamics.WhiteRabbit.TimestampedCounter)
    -> MemberSelector(Selector=Seconds)
    -> BehaviorSubject HarpTimestampSource

    GroupWorkflow HarpDevices
        SubscribeSubject StartExperiment
        -> Unit
        -> PublishSubject TriggerHarpReadDump

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpBehavior.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=Extensions\HarpBehaviorDevice.bonsai, PortName=COM5)

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpLickometer.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=Extensions\HarpLicketySplitDevice.bonsai, PortName=COMx, TriggerHarpReadDumpSubjectName=TriggerHarpReadDump)

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpClockGenerator.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:HarpWhiteRabbit.bonsai, PortName=COMx, TriggerHarpReadDumpSubjectName=TriggerHarpReadDump)

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpLoadCells.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=Extensions\HarpLoadCellsDevice.bonsai, PortName=COMx, TriggerHarpReadDumpSubjectName=TriggerHarpReadDump) => #18
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpLoadCells)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #21
        #18, #21 -> SubscribeWhen

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpAnalogInput.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:HarpAnalogInputDevice.bonsai, PortName=COMx, TriggerHarpReadDumpSubjectName=TriggerHarpReadDump) => #26
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpAnalogInput)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #29
        #26, #29 -> SubscribeWhen

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Manipulator)
        -> MemberSelector(Selector=Calibration) => #33
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Manipulator)
        -> MemberSelector(Selector=PortName)
        -> PropertyMapping(PortName) => #37
        #33, #37 -> IncludeWorkflow(Path=Extensions\AindManipulator.bonsai, PortName=COMx, TriggerHarpReadDumpSubjectName=TriggerHarpReadDump)

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpEnvironmentSensor.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=Extensions\HarpEnvironmentSensor.bonsai, PortName=COMx) => #42
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpEnvironmentSensor)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #45
        #42, #45 -> SubscribeWhen

    GroupWorkflow Cameras
        GroupWorkflow TriggeredCameras
            SubscribeSubject RigSchema
            -> Take(Count=1)
            -> MemberSelector(Selector=TriggeredCameraController)
            -> AsyncSubject TriggeredCameraController
            -> MemberSelector(Selector=FrameRate.Value)
            -> AsyncSubject CameraFrameRate

            SubscribeSubject CameraFrameRate
            -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.Camera0Frequency)
            -> MulticastSubject HarpBehaviorCommands

            SubscribeSubject HarpBehaviorEvents
            -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
            -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedCamera0Frame) => #11
            -> MemberSelector(Selector=Value)
            -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.FrameAcquired>(Value=FrameAcquired))
            -> GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0))
            -> Condition => #15
                WorkflowInput Source1
                -> WorkflowOutput
            #15, #11 -> WithLatestFrom
            -> MemberSelector(Selector=Item2.Seconds)
            -> PublishSubject FrameEvent

            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=Cameras)
            -> Merge
            -> CreateObservable InstantiateCamera => #22
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject ThisCamera

                BooleanProperty(Value=true)
                -> MulticastSubject TriggeredCamerasInitialized
                -> Take(Count=1) => #5
                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Value)
                -> PropertyMapping => #8
                  SerialNumber(Selector=SerialNumber)
                  ExposureTime(Selector=Exposure)
                  Gain(Selector=Gain)
                  Binning(Selector=Binning)
                  ColorProcessing(Selector=ColorProcessing)
                  Gamma(Selector=Gamma)
                  PixelFormat(Selector=PixelFormat)
                  AdcBitDepth(Selector=AdcBitDepth)
                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Value)
                -> MemberSelector(Selector=RegionOfInterest)
                -> InputMapping(Value(Selector="X,Y,Width,Height"))
                -> PropertySource<Bonsai.Vision.Crop,OpenCV.Net.Rect>(MemberName=RegionOfInterest, Value(X=0, Y=0, Width=0, Height=0))
                -> PropertyMapping(RegionOfInterest) => #14
                #5, #8, #14 -> AllenNeuralDynamics.Core.AindSpinnakerCapture => #15
                  Index=nil
                  ColorProcessing=Default
                  ExposureTime=19000
                  Gain=0
                  Binning=1
                  Gamma=nil
                  PixelFormat=Mono8
                  RegionOfInterest(X=0, Y=0, Width=0, Height=0)
                  AdcBitDepth=nil
                SubscribeSubject FrameEvent => #16
                #15, #16 -> Zip
                -> Bonsai.Harp.CreateTimestamped => #18
                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Key) => #20
                #18, #20 -> WithLatestFrom
                -> WorkflowOutput
            Annotation SpinnakerApiNote(Text="For some reason, if you try to access the spinnaker API back to back, a threading error is emitted")
            -> Timer(DueTime=PT0S, Period=PT0.1S) => #24
            #22, #24 -> Zip
            -> MemberSelector(Selector=Item1)
            -> Merge
            -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
            -> ReplaySubject TriggeredCamerasStream(BufferSize=nil)

            BehaviorSubject<System.Boolean> TriggeredCamerasInitialized
            -> IntProperty(Value=1) => #31
            IntProperty(Value=0)
            -> Take(Count=1) => #33
            #31, #33 -> Merge
            -> Accumulate => #35
            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=Cameras)
            -> MemberSelector(Selector=Count)
            -> PropertyMapping(Value) => #39
            #35, #39 -> GreaterThanOrEqual(Operand=IntProperty(Value=0))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Take(Count=1)
            -> Delay(DueTime=PT0.1S)
            -> BehaviorSubject TriggeredCamerasReady

    GroupWorkflow Networking
        SubscribeSubject SoftwareEvents
        -> AllenNeuralDynamics.AindBehaviorServices.DataTypes.SerializeToJson(Formatting=None) => #1
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Networking.ZmqPublisher)
        -> PropertyMapping(ConnectionString(Selector=ConnectionString), Topic(Selector=Topic)) => #4
        #1, #4 -> Bonsai.ZeroMQ.Publisher(ConnectionString=@tcp://localhost:5556, Topic=telekinesis)
        -> WorkflowOutput

GroupWorkflow SessionSettings
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=RngSeed) => #1
    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=10)
    -> Bonsai.Numerics.Distributions.Sample => #4
    #1, #4 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform CheckNull
      Expression: Item1.HasValue ? Item1.Value : Item2
    -> Take(Count=1)
    -> AsyncSubject RngSeedValue
    -> PropertyMapping(Seed)
    -> Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Take(Count=1)
    -> AsyncSubject RngSeed

    AllenNeuralDynamics.VersionControl.CreateRepository(Path=../.)
    -> AsyncSubject Repository

    SubscribeSubject SubjectSchema
    -> PropertyMapping(SessionName(Selector=SessionName)) => #16
    SubscribeSubject RigSchema
    -> MemberSelector(Selector=DataDirectory)
    -> PropertyMapping(RootFolder) => #19
    #16, #19 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:GenerateRootLoggingPathFromSession.bonsai, RootFolder="", SessionName=nil, SubjectName=LoggingRootPath)
    -> Take(Count=1)
    -> AsyncSubject CompoundRootPath

GroupWorkflow Initialization
    Annotation Label
      Text:
        new(
        Item1.Seconds as Seconds,
        Item1.Value as CachedProjectedAction,
        Item2.Item1 as TrialAction,
        Item2.Item2 as UpperThr,
        Item2.Item3 as LowerThr)
    -> BehaviorSubject<System.Tuple(Bonsai.Harp.Timestamped(System.Double),System.Tuple(AindBehaviorTelekinesisDataSchema.Action,System.Double,System.Double))> LiveHarvestOutcome

    BehaviorSubject<System.Reactive.Unit> StartExperiment
    BehaviorSubject<System.Tuple(System.Double,AindBehaviorTelekinesisDataSchema.ContinuousFeedback)> ContinuousFeedbackMonitor
    BehaviorSubject<OpenCV.Net.Mat> CurrentLut
    BehaviorSubject<AllenNeuralDynamics.AindBehaviorServices.DataTypes.SoftwareEvent> SoftwareEvents
    BehaviorSubject<AllenNeuralDynamics.AindBehaviorServices.DataTypes.SoftwareEvent> RuntimeLogging
    BehaviorSubject<System.Nullable(System.Double)> OverrideUpperThreshold
    BehaviorSubject<System.Reactive.Unit> EndExperiment
    BehaviorSubject<System.Reactive.Unit> StartLogging
    BehaviorSubject<System.String> Annotations

    IntProperty(Value=0)
    -> Take(Count=1)
    -> BehaviorSubject TrialNumber

    SubscribeSubject TrialNumber
    -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=TrialNumber)
    -> MulticastSubject SoftwareEvents

    BooleanProperty(Value=false)
    -> Take(Count=1) => #18
    SubscribeSubject StartExperiment
    -> Take(Count=1)
    -> BooleanProperty(Value=true) => #21
    SubscribeSubject EndExperiment
    -> Take(Count=1)
    -> BooleanProperty(Value=false) => #24
    #18, #21, #24 -> Merge
    -> BehaviorSubject ExperimentState

    BooleanProperty(Value=false)
    -> BehaviorSubject IsExperimentPaused

GroupWorkflow HardwareChecks
    Defer ProtocolValidation => #0
        GroupWorkflow CameraChecks
            SubscribeSubject TriggeredCamerasStream
            -> CreateObservable CheckDroppedFrames
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject InputSequence

                SubscribeSubject InputSequence
                -> Merge
                -> MemberSelector(Selector=Value.ChunkData)
                -> MemberSelector(Selector=FrameID)
                -> Bonsai.Dsp.Difference(Order=1)
                -> Subtract(Operand=DoubleProperty(Value=1))
                -> GreaterThan(Operand=DoubleProperty(Value=0))
                -> Condition => #10
                    WorkflowInput Source1
                    -> WorkflowOutput
                SubscribeSubject InputSequence
                -> MemberSelector(Selector=Key) => #12
                #10, #12 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> WorkflowOutput
            -> Merge
            -> Format(Format="Camera {0} dropped frame detected during pre-session!", Selector=it)
            -> InputMapping(Selector=it, Message(Selector=it))
            -> AllenNeuralDynamics.Core.ThrowException(Message="Dropped frame detected during pre-session!") => #5
            SubscribeSubject StartExperiment => #6
            #5, #6 -> TakeUntil

            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=Cameras)
            -> Merge
            -> CreateObservable CheckCameraSettings
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject ThisCamera

                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Value.Exposure) => #4
                SubscribeSubject TriggeredCameraController
                -> MemberSelector(Selector=FrameRate)
                -> MemberSelector(Selector=Value) => #7
                #4, #7 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: ((1.0 / Item2) * 1000000) < double(Item1) + 1000
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Take(Count=1) => #11
                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Key) => #13
                #11, #13 -> WithLatestFrom
                -> WorkflowOutput
            -> Merge
            -> Format(Format="Camera {0} exposure setting not compatible with requested frame rate!", Selector=it)
            -> InputMapping(Selector=it, Message(Selector=it))
            -> AllenNeuralDynamics.Core.ThrowException(Message="Dropped frame detected during pre-session!")

            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=FrameRate.HasValue)
            -> BitwiseNot
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> AllenNeuralDynamics.Core.ThrowException(Message="TriggeredCameraControl must specify a valid FrameRate property!")

            SubscribeSubject TriggeredCamerasStream
            -> CreateObservable OnlineQC
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject InputSequence

                SubscribeSubject InputSequence
                -> Merge => #4
                -> MemberSelector(Selector=Value.ChunkData)
                -> MemberSelector(Selector=Timestamp)
                -> Bonsai.Dsp.Difference(Order=1)
                -> Multiply(Operand=DoubleProperty(Value=1E-09)) => #8
                #4 -> MemberSelector(Selector=Seconds)
                -> Bonsai.Dsp.Difference(Order=1) => #10
                #8, #10 -> Zip
                -> Subtract
                -> Bonsai.Dsp.Abs => #13
                ExternalizedMapping(Value(DisplayName=JitterThreshold)) => #14
                #13, #14 -> GreaterThan(Operand=DoubleProperty(Value=0.0005))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> ObserveOn(Scheduler=TaskPoolScheduler) => #17
                ExternalizedMapping(Period(DisplayName=SnoozeTime))
                -> Timer(DueTime=PT0S, Period=PT10S) => #19
                #17, #19 -> Gate
                -> SelectMany MakeUI
                    SubscribeSubject InputSequence
                    -> MemberSelector(Selector=Key)
                    -> Format(Format="Camera {0} out-of-alignment qc was triggered.", Selector=it)
                    -> InputMapping(Text(Selector=it))
                    -> AllenNeuralDynamics.Core.Design.MessageBox(Text="", Title=Warning, MessageBoxIcon=Exclamation)
            -> Merge

        SubscribeSubject Repository
        -> AllenNeuralDynamics.VersionControl.IsRepositoryClean(IgnoreUntracked=false)
        -> BitwiseNot => #3
        SubscribeSubject SubjectSchema
        -> MemberSelector(Selector=AllowDirtyRepo) => #5
        #3, #5 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform AllowDirty?
          Expression: Item2 ? False : Item1
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> AllenNeuralDynamics.Core.ThrowException(Message="Repository is not clean! Please discard all local changes.")

        IncludeWorkflow(Path=Extensions\ValidateHarpClkOutput.bonsai)
    SubscribeSubject SubjectSchema
    -> MemberSelector(Selector=SkipHardwareValidation)
    -> BitwiseNot
    -> Condition => #4
        WorkflowInput Source1
        -> WorkflowOutput
    #0, #4 -> SubscribeWhen
    -> DelaySubscription(DueTime=PT2S)
    -> WorkflowOutput

IncludeWorkflow(Path=Extensions\OperationControl.bonsai)

Defer TaskLogic => #9
    SubscribeSubject TaskLogicParameters
    -> GroupWorkflow PermutateBlocks
        WorkflowInput Source1
        -> MemberSelector(Selector=Environment) => #1
        -> Condition Shuffle
            WorkflowInput Source1
            -> MemberSelector(Selector=Shuffle)
            -> WorkflowOutput
        -> MemberSelector(Selector=BlockStatistics)
        -> Merge => #4
        SubscribeSubject RngSeed => #5
        #4, #5 -> Bonsai.Numerics.Permutation => #6
        #1 -> Condition DontShuffle
            WorkflowInput Source1
            -> MemberSelector(Selector=Shuffle)
            -> BitwiseNot
            -> WorkflowOutput
        -> MemberSelector(Selector=BlockStatistics)
        -> Merge => #9
        #6, #9 -> Merge
        -> ToList
        -> WorkflowOutput
    -> AsyncSubject BlockStatistics

    IntProperty(Value=0)
    -> Take(Count=1)
    -> BehaviorSubject BlockIndex

    SubscribeSubject BlockStatistics => #6
    SubscribeSubject BlockIndex
    -> PropertyMapping(Value) => #8
    #6, #8 -> Index(Operand=IntProperty(Value=0))
    -> Take(Count=1)
    -> BehaviorSubject ActiveBlock
    -> IncludeWorkflow(Path=Extensions\CreateSoftwareEventInline.bonsai, EventName=ActiveBlock)
    -> IncludeWorkflow(Path=Extensions\BlockLogic.bonsai)
    -> Last
    -> SelectMany BlockIndex++
        SubscribeSubject BlockIndex
        -> Take(Count=1)
        -> Add(Operand=IntProperty(Value=1))
        -> MulticastSubject BlockIndex
        -> WorkflowOutput
    -> Repeat
    -> TakeWhile
        SubscribeSubject BlockIndex
        -> Add(Operand=IntProperty(Value=1)) => #1
        SubscribeSubject BlockStatistics
        -> MemberSelector(Selector=Count) => #3
        #1, #3 -> CombineLatest
        -> LessThanOrEqual
        -> WorkflowOutput
    -> WorkflowOutput
SubscribeSubject EndExperiment => #10
#9, #10 -> TakeUntil => #11
SubscribeSubject StartExperiment => #12
#11, #12 -> SubscribeWhen

IncludeWorkflow(Path=Extensions\Visualizers.bonsai)
-> Bonsai.Design.VisualizerWindow(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>, Text=Telekinesis, Visible=true, Location=nil, Size=nil, WindowState=Maximized)

IncludeWorkflow(Path=Extensions\Logging.bonsai) => #16
SubscribeSubject EndExperiment
-> Delay(DueTime=PT1S) => #18
#16, #18 -> TakeUntil => #19
SubscribeSubject StartLogging => #20
#19, #20 -> SubscribeWhen

GroupWorkflow StartCondition
    BehaviorSubject<System.Reactive.Unit> StartExperimentShortcut => #0
    SubscribeSubject TriggeredCamerasReady => #1
    #0, #1 -> Zip
    -> Take(Count=1)
    -> MemberSelector(Selector=Item1)
    -> MulticastSubject StartLogging => #5
    ExternalizedMapping(DueTime(DisplayName=LogDelay)) => #6
    #5, #6 -> Delay(DueTime=PT3S)
    -> MulticastSubject StartExperiment
    -> WorkflowOutput

SubscribeSubject EndExperiment
-> Delay(DueTime=PT0.5S)
-> SelectMany EndRoutine
    Unit
    -> MulticastSubject HomeMotors => #1
    SubscribeSubject IsHomed
    -> DelaySubscription(DueTime=PT0.1S)
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Unit => #5
    Timer(DueTime=PT2S)
    -> Unit => #7
    #5, #7 -> Merge => #8
    #1, #8 -> Zip
    -> Take(Count=1)
    -> WorkflowOutput
-> Delay(DueTime=PT2S)
-> Take(Count=1)
-> WorkflowOutput
